CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Spindle
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Spindle
    Name the primary objects to be identified:SpindlePole
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.1
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:SpindlePole
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:7|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder sub-folder|AurA_3_LMdP
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|FileName_Spindle,SpindlePole|AreaShape_Center_Y,SpindlePole|AreaShape_Center_X,SpindlePole|AreaShape_Area,SpindlePole|AreaShape_Orientation,SpindlePole|AreaShape_MinorAxisLength,SpindlePole|AreaShape_MajorAxisLength,SpindlePole|Location_Center_Y,SpindlePole|Location_Center_X,SpindlePole|Location_Center_Z,SpindlePole|Number_Object_Number
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Orientation_
    Overwrite existing files without warning?:Yes
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